;  Works OK now!

#author doug@dougbraun.com
#idString METEX,Metex ME-11 Block
#name Metex ME-11 Block
#handle MetexMD11Block
#port comfixedbaud
#baudrate 600N72Dr
#driver Block

#value VollltageDC V si DCV,DCmV
#value VoltageAC V si ACV,ACmV
#value CurrentDC A si DCA,DCmA
#value CurrentAC A si ACA,ACmA
#value Resistance ohm si OHMOhm,OHOhm,OHkOhm
#value Diode V si DImV

#rxLength 14
#rxEnd \r
#rxFormat 0s2 3s6 9s4

#askValues values?
#askValuesMathFormat match(getElement(replace(value,"\""," "), 1),".*L.*") ?  1e100 :
			  (getElement(replace(value, "\"", " "), 1) *
			      (match(getElement(replace(value,"\""," "), 2), "MOhm") ? 1e6 :
				  (match(getElement(replace(value,"\""," "), 2), "kOhm") ? 1e3 : 
				      (match(getElement(replace(value,"\""," "), 2), "m.*") ? 0.001 : 1.0))));


#askMode values?
#askModeMathFormat getElement(value, 0)+getElement(replace(value,"\""," "), 2)
#modeFromValue getElement(value, 0)+getElement(replace(value,"\""," "), 2)


; Sending any character will trigger a data packet.
; Poll max once per second.  The meter transmits the data bytes rather slowly.
#pollPause 1000
#poll "DD"

#interfaceType DMM
#interface readValue 0

